numdendskip=1
begintemplate DSGC_Poleg
	external numdendskip
	public soma,dend,dends ,somas ,all,ON,OFF ,SACinhibsyn,numsyn,BIPsyn,SACexcsyn,countON
    objref dends,all ,ON,OFF,somas
	objref  SACinhibsyn[2],BIPsyn[2],SACexcsyn[2]

	soma3z=0
	on3z=-10
	off3z=-200
	fix1=-200


create soma,dend[350], dummy

proc topol() { local i
  create soma,dend[350]
  for i = 2, 4 connect dend[i](0), dend[i-1](1)
  connect dend[1](0), soma(1)
  connect dend[5](0), dend[2](1)
  for i = 6, 12 connect dend[i](0), dend[i-1](1)
  connect dend[13](0), dend[3](1)
  for i = 14, 16 connect dend[i](0), dend[i-1](1)
  connect dend[17](0), dend[1](1)
  for i = 18, 23 connect dend[i](0), dend[i-1](1)
  connect dend[24](0), soma(1)
  for i = 25, 34 connect dend[i](0), dend[i-1](1)
  connect dend[35](0), soma(0)
  for i = 36, 47 connect dend[i](0), dend[i-1](1)
  connect dend[48](0), dend[6](1)
  for i = 49, 52 connect dend[i](0), dend[i-1](1)
  for i = 53, 54 connect dend[i](0), dend[i-46](1)
  connect dend[55](0), dend[54](1)
  for i = 56, 58 connect dend[i](0), dend[i-47](1)
  connect dend[59](0), dend[5](1)
  for i = 60, 62 connect dend[i](0), dend[i-1](1)
  connect dend[63](0), dend[13](1)
  for i = 64, 67 connect dend[i](0), dend[i-1](1)
  for i = 68, 69 connect dend[i](0), dend[i-54](1)
  for i = 70, 71 connect dend[i](0), dend[i-52](1)
  connect dend[72](0), dend[22](1)
  connect dend[73](0), dend[21](1)
  for i = 74, 79 connect dend[i](0), dend[i-1](1)
  connect dend[80](0), dend[20](1)
  for i = 81, 83 connect dend[i](0), dend[i-1](1)
  connect dend[84](0), dend[17](1)
  for i = 85, 92 connect dend[i](0), dend[i-1](1)
  connect dend[93](0), dend[33](1)
  connect dend[94](0), dend[32](1)
  connect dend[95](0), dend[31](1)
  for i = 96, 98 connect dend[i](0), dend[i-1](1)
  connect dend[99](0), dend[30](1)
  connect dend[100](0), dend[27](1)
  connect dend[101](0), dend[100](1)
  connect dend[102](0), dend[28](1)
  connect dend[103](0), dend[26](1)
  connect dend[104](0), dend[25](1)
  for i = 105, 106 connect dend[i](0), dend[i-1](1)
  connect dend[107](0), dend[24](1)
  for i = 108, 119 connect dend[i](0), dend[i-1](1)
  for i = 120, 121 connect dend[i](0), dend[29](1)
  connect dend[122](0), dend[36](1)
  connect dend[123](0), dend[122](1)
  connect dend[124](0), dend[37](1)
  for i = 125, 128 connect dend[i](0), dend[i-1](1)
  for i = 129, 131 connect dend[i](0), dend[i-91](1)
  for i = 132, 138 connect dend[i](0), dend[i-1](1)
  connect dend[139](0), dend[43](1)
  connect dend[140](0), dend[139](1)
  connect dend[141](0), dend[42](1)
  connect dend[142](0), dend[41](1)
  for i = 143, 144 connect dend[i](0), dend[i-99](1)
  connect dend[145](0), dend[45](1)
  for i = 146, 147 connect dend[i](0), dend[i-1](1)
  connect dend[148](0), dend[46](1)
  connect dend[149](0), dend[35](1)
  for i = 150, 156 connect dend[i](0), dend[i-1](1)
  connect dend[157](0), dend[48](1)
  for i = 158, 165 connect dend[i](0), dend[i-1](1)
  connect dend[166](0), dend[50](1)
  connect dend[167](0), dend[166](1)
  connect dend[168](0), dend[51](1)
  connect dend[169](0), dend[49](1)
  connect dend[170](0), dend[54](1)
  for i = 171, 172 connect dend[i](0), dend[i-1](1)
  for i = 173, 174 connect dend[i](0), dend[i-113](1)
  connect dend[175](0), dend[59](1)
  connect dend[176](0), dend[63](1)
  for i = 177, 178 connect dend[i](0), dend[i-112](1)
  connect dend[179](0), dend[64](1)
  for i = 180, 181 connect dend[i](0), dend[i-106](1)
  for i = 182, 183 connect dend[i](0), dend[i-105](1)
  for i = 184, 188 connect dend[i](0), dend[i-1](1)
  connect dend[189](0), dend[76](1)
  connect dend[190](0), dend[73](1)
  for i = 191, 193 connect dend[i](0), dend[i-1](1)
  for i = 194, 195 connect dend[i](0), dend[i-113](1)
  connect dend[196](0), dend[80](1)
  connect dend[197](0), dend[91](1)
  connect dend[198](0), dend[89](1)
  for i = 199, 200 connect dend[i](0), dend[i-112](1)
  connect dend[201](0), dend[200](1)
  connect dend[202](0), dend[90](1)
  connect dend[203](0), dend[86](1)
  for i = 204, 205 connect dend[i](0), dend[i-1](1)
  connect dend[206](0), dend[85](1)
  connect dend[207](0), dend[84](1)
  connect dend[208](0), dend[97](1)
  connect dend[209](0), dend[96](1)
  connect dend[210](0), dend[95](1)
  connect dend[211](0), dend[210](1)
  connect dend[212](0), dend[100](1)
  connect dend[213](0), dend[212](1)
  connect dend[214](0), dend[104](1)
  for i = 215, 217 connect dend[i](0), dend[i-1](1)
  connect dend[218](0), dend[105](1)
  for i = 219, 220 connect dend[i](0), dend[i-1](1)
  connect dend[221](0), dend[114](1)
  connect dend[222](0), dend[116](1)
  connect dend[223](0), dend[118](1)
  connect dend[224](0), dend[117](1)
  connect dend[225](0), dend[112](1)
  connect dend[226](0), dend[225](1)
  connect dend[227](0), dend[111](1)
  connect dend[228](0), dend[113](1)
  connect dend[229](0), dend[115](1)
  connect dend[230](0), dend[108](1)
  connect dend[231](0), dend[107](1)
  for i = 232, 233 connect dend[i](0), dend[i-123](1)
  connect dend[234](0), dend[116](1)
  connect dend[235](0), dend[122](1)
  for i = 236, 243 connect dend[i](0), dend[i-1](1)
  for i = 244, 245 connect dend[i](0), dend[i-120](1)
  for i = 246, 247 connect dend[i](0), dend[i-1](1)
  for i = 248, 249 connect dend[i](0), dend[i-122](1)
  connect dend[250](0), dend[134](1)
  for i = 251, 252 connect dend[i](0), dend[i-115](1)
  for i = 253, 255 connect dend[i](0), dend[i-122](1)
  connect dend[256](0), dend[135](1)
  connect dend[257](0), dend[139](1)
  for i = 258, 259 connect dend[i](0), dend[i-113](1)
  for i = 260, 262 connect dend[i](0), dend[i-109](1)
  connect dend[263](0), dend[262](1)
  connect dend[264](0), dend[155](1)
  connect dend[265](0), dend[154](1)
  connect dend[266](0), dend[150](1)
  connect dend[267](0), dend[149](1)
  for i = 268, 275 connect dend[i](0), dend[i-111](1)
  connect dend[276](0), dend[166](1)
  connect dend[277](0), dend[171](1)
  connect dend[278](0), dend[170](1)
  connect dend[279](0), dend[278](1)
  connect dend[280](0), dend[183](1)
  connect dend[281](0), dend[185](1)
  connect dend[282](0), dend[184](1)
  for i = 283, 284 connect dend[i](0), dend[i-97](1)
  connect dend[285](0), dend[190](1)
  connect dend[286](0), dend[192](1)
  connect dend[287](0), dend[191](1)
  connect dend[288](0), dend[200](1)
  for i = 289, 290 connect dend[i](0), dend[i-86](1)
  for i = 291, 292 connect dend[i](0), dend[i-1](1)
  connect dend[293](0), dend[210](1)
  connect dend[294](0), dend[293](1)
  connect dend[295](0), dend[212](1)
  connect dend[296](0), dend[216](1)
  connect dend[297](0), dend[296](1)
  connect dend[298](0), dend[215](1)
  connect dend[299](0), dend[214](1)
  connect dend[300](0), dend[219](1)
  connect dend[301](0), dend[218](1)
  for i = 302, 303 connect dend[i](0), dend[i-1](1)
  connect dend[304](0), dend[225](1)
  for i = 305, 310 connect dend[i](0), dend[i-1](1)
  connect dend[311](0), dend[227](1)
  connect dend[312](0), dend[242](1)
  connect dend[313](0), dend[241](1)
  connect dend[314](0), dend[240](1)
  connect dend[315](0), dend[239](1)
  connect dend[316](0), dend[238](1)
  connect dend[317](0), dend[237](1)
  connect dend[318](0), dend[236](1)
  connect dend[319](0), dend[235](1)
  for i = 320, 321 connect dend[i](0), dend[i-75](1)
  connect dend[322](0), dend[262](1)
  connect dend[323](0), dend[322](1)
  connect dend[324](0), dend[278](1)
  for i = 325, 326 connect dend[i](0), dend[i-35](1)
  connect dend[327](0), dend[293](1)
  connect dend[328](0), dend[327](1)
  connect dend[329](0), dend[296](1)
  connect dend[330](0), dend[329](1)
  connect dend[331](0), dend[302](1)
  connect dend[332](0), dend[331](1)
  connect dend[333](0), dend[301](1)
  for i = 334, 335 connect dend[i](0), dend[i-26](1)
  connect dend[336](0), dend[307](1)
  connect dend[337](0), dend[336](1)
  connect dend[338](0), dend[306](1)
  connect dend[339](0), dend[305](1)
  connect dend[340](0), dend[304](1)
  connect dend[341](0), dend[322](1)
  for i = 342, 343 connect dend[i](0), dend[i-15](1)
  for i = 344, 345 connect dend[i](0), dend[i-1](1)
  connect dend[346](0), dend[329](1)
  connect dend[347](0), dend[331](1)
  connect dend[348](0), dend[336](1)
  connect dend[349](0), dend[349-6](1)
  connect dend[0](0), dend[350-6](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(104.59, 123.486, 50, 0.878906)
	pt3dadd(105.007, 122.963, 45.9626, 6.14065)
	pt3dadd(104.594, 122.607, 46.3301, 7.7364)
	pt3dadd(104.368, 122.2, 46.4825, 8.31975)
	pt3dadd(104.245, 121.772, 46.541, 8.35494)
	pt3dadd(105.518, 119.897, 47.1442, 10.6233)
	pt3dadd(103.711, 119.531, 50, 0.878906)
  }
  dend[1] {pt3dclear()
	pt3dadd(103.711, 119.531, 50, 0.878906)
	pt3dadd(103.845, 118.294, 46.9907, 11.5426)
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  }
}
proc shape3d_2() {
  dend[10] {	pt3dadd(56.6895, 84.8145, 41, 0)
	pt3dadd(56.25, 84.8145, 41, 0)
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  }
}
proc shape3d_3() {
  dend[14] {	pt3dadd(51.8555, 121.289, 33, 0)
	pt3dadd(51.416, 121.729, 32, 0)
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  }
}
proc shape3d_4() {
  dend[21] {	pt3dadd(72.9492, 146.777, 25, 0)
	pt3dadd(72.5098, 146.777, 25, 0)
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  }
}
proc shape3d_5() {
  dend[26] {	pt3dadd(83.9355, 142.822, 32, 0)
	pt3dadd(83.4961, 143.262, 32, 0)
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  }
}
proc shape3d_6() {
  dend[36] {	pt3dadd(108.545, 131.836, 40, 0)
	pt3dadd(108.545, 132.275, 39, 0)
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  }
}
proc shape3d_7() {
  dend[46] {	pt3dadd(169.629, 156.885, 23, 0)
	pt3dadd(170.068, 156.885, 22, 0)
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  }
}
proc shape3d_8() {
  dend[51] {	pt3dadd(97.998, 60.6445, 42, 0)
	pt3dadd(97.5586, 60.6445, 42, 0)
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  }
}
proc shape3d_9() {
  dend[56] {	pt3dadd(55.3711, 88.7695, 36, 0)
	pt3dadd(54.9316, 88.7695, 36, 0)
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  }
}
proc shape3d_10() {
  dend[61] {	pt3dadd(160.84, 91.4062, 33, 0)
	pt3dadd(161.279, 90.9668, 32, 0)
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  }
}
proc shape3d_11() {
  dend[68] {	pt3dadd(48.3398, 137.549, 30, 0)
	pt3dadd(47.9004, 137.988, 30, 0)
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  }
}
proc shape3d_12() {
  dend[76] {	pt3dadd(50.5371, 172.705, 26, 0)
	pt3dadd(50.0977, 173.145, 27, 0)
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  }
}
proc shape3d_13() {
  dend[86] {	pt3dadd(103.711, 104.59, 30, 0)
	pt3dadd(104.15, 104.15, 30, 0)
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  }
}
proc shape3d_14() {
  dend[96] {	pt3dadd(34.7168, 114.258, 35, 0)
	pt3dadd(34.2773, 114.258, 35, 0)
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  }
}
proc shape3d_15() {
  dend[105] {	pt3dadd(77.3438, 153.369, 29, 0)
	pt3dadd(76.9043, 153.369, 29, 0)
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  }
}
proc shape3d_16() {
  dend[108] {	pt3dadd(89.6484, 152.49, 27, 0)
  }
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  }
}
proc shape3d_17() {
  dend[119] {	pt3dadd(129.199, 197.754, 20, 0)
	pt3dadd(129.199, 198.193, 20, 0)
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  }
}
proc shape3d_18() {
  dend[124] {	pt3dadd(114.697, 141.064, 31, 0)
	pt3dadd(115.137, 141.064, 30, 0)
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  }
}
proc shape3d_19() {
  dend[129] {	pt3dadd(116.016, 141.064, 30, 0)
	pt3dadd(116.455, 140.625, 30, 0)
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  }
}
proc shape3d_20() {
  dend[139] {	pt3dadd(130.078, 167.871, 25, 0)
	pt3dadd(130.518, 168.311, 25, 0)
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  }
}
proc shape3d_21() {
  dend[142] {	pt3dadd(119.531, 150.732, 27, 0)
  }
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  }
}
proc shape3d_22() {
  dend[147] {	pt3dadd(174.463, 166.992, 17, 0)
	pt3dadd(174.902, 166.992, 17, 0)
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  }
}
proc shape3d_23() {
  dend[156] {	pt3dadd(157.764, 131.836, 26, 0)
	pt3dadd(158.203, 131.836, 26, 0)
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  }
}
proc shape3d_24() {
  dend[162] {  }
  dend[163] {pt3dclear()
	pt3dadd(134.033, 32.959, 49, 0)
	pt3dadd(134.473, 32.5195, 49, 0)
	pt3dadd(134.912, 32.0801, 49, 0)
	pt3dadd(135.352, 32.0801, 49, 0)
	pt3dadd(135.791, 31.6406, 48, 0)
	pt3dadd(136.23, 31.6406, 48, 0)
	pt3dadd(136.67, 31.6406, 48, 0)
	pt3dadd(137.109, 31.6406, 48, 0)
	pt3dadd(137.549, 31.6406, 48, 0)
  }
  dend[164] {pt3dclear()
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  }
}
proc shape3d_25() {
  dend[167] {	pt3dadd(96.2402, 51.416, 47, 0)
	pt3dadd(95.8008, 51.8555, 47, 0)
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  }
}
proc shape3d_26() {
  dend[172] {	pt3dadd(86.1328, 73.3887, 44, 0)
	pt3dadd(85.6934, 73.3887, 44, 0)
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  }
}
proc shape3d_27() {
  dend[179] {	pt3dadd(77.7832, 102.832, 29, 0)
	pt3dadd(77.7832, 102.393, 29, 0)
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  }
}
proc shape3d_28() {
  dend[187] {	pt3dadd(25.9277, 206.104, 25, 0)
	pt3dadd(25.4883, 205.664, 25, 0)
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  }
}
proc shape3d_29() {
  dend[194] {	pt3dadd(68.1152, 160.84, 17, 0)
	pt3dadd(67.6758, 160.84, 17, 0)
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  }
}
proc shape3d_30() {
  dend[199] {	pt3dadd(106.787, 94.043, 36, 0)
	pt3dadd(106.348, 94.043, 36, 0)
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  }
}
proc shape3d_31() {
  dend[206] {	pt3dadd(106.348, 118.213, 16, 0)
	pt3dadd(106.787, 118.652, 16, 0)
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  }
}
proc shape3d_32() {
  dend[212] {	pt3dadd(48.7793, 145.898, 23, 0)
	pt3dadd(48.3398, 146.338, 22, 0)
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  }
}
proc shape3d_33() {
  dend[217] {	pt3dadd(47.9004, 198.633, 15, 0)
	pt3dadd(47.4609, 199.072, 15, 0)
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  }
}
proc shape3d_34() {
  dend[220] {	pt3dadd(13.623, 176.66, 31, 0)
	pt3dadd(13.1836, 176.66, 31, 0)
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  }
}
proc shape3d_35() {
  dend[225] {	pt3dadd(83.9355, 178.418, 23, 0)
	pt3dadd(83.9355, 178.857, 23, 0)
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  }
}
proc shape3d_36() {
  dend[234] {	pt3dadd(86.5723, 195.557, 21, 0)
	pt3dadd(86.1328, 195.996, 21, 0)
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  }
}
proc shape3d_37() {
  dend[244] {	pt3dadd(124.805, 150.293, 18, 0)
	pt3dadd(124.805, 150.293, 17, 0)
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  }
}
proc shape3d_38() {
  dend[248] {	pt3dadd(162.158, 141.504, 24, 0)
	pt3dadd(162.598, 141.943, 24, 0)
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  }
}
proc shape3d_39() {
  dend[257] {	pt3dadd(146.338, 172.705, 22, 0)
	pt3dadd(146.777, 172.705, 22, 0)
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  }
}
proc shape3d_40() {
  dend[260] {	pt3dadd(115.576, 123.926, 31, 0)
  }
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  }
}
proc shape3d_41() {
  dend[265] {	pt3dadd(159.521, 128.76, 27, 0)
	pt3dadd(159.961, 128.76, 27, 0)
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  }
}
proc shape3d_42() {
  dend[275] {	pt3dadd(145.898, 24.1699, 49, 0)
	pt3dadd(145.459, 23.7305, 49, 0)
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  }
}
proc shape3d_43() {
  dend[281] {	pt3dadd(30.7617, 192.48, 27, 0)
	pt3dadd(30.3223, 192.041, 27, 0)
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  }
}
proc shape3d_44() {
  dend[286] {	pt3dadd(37.793, 139.307, 35, 0)
	pt3dadd(37.3535, 138.867, 35, 0)
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  }
}
proc shape3d_45() {
  dend[289] {	pt3dadd(106.787, 111.182, 33, 0)
	pt3dadd(106.348, 111.621, 33, 0)
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  }
}
proc shape3d_46() {
  dend[297] {	pt3dadd(41.3086, 197.754, 14, 0)
	pt3dadd(40.8691, 198.193, 14, 0)
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  }
}
proc shape3d_47() {
  dend[305] {	pt3dadd(77.7832, 185.889, 17, 0)
	pt3dadd(77.3438, 185.889, 16, 0)
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  }
}
proc shape3d_48() {
  dend[312] {	pt3dadd(114.258, 173.145, 9, 0)
	pt3dadd(114.697, 172.705, 9, 0)
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  }
}
proc shape3d_49() {
  dend[319] {	pt3dadd(101.514, 147.217, 24, 0)
	pt3dadd(101.074, 146.777, 25, 0)
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  }
}
proc shape3d_50() {
  dend[323] {	pt3dadd(156.006, 117.773, 18, 0)
	pt3dadd(156.445, 117.773, 18, 0)
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  }
}
proc shape3d_51() {
  dend[326] {	pt3dadd(113.818, 82.1777, 22, 0)
	pt3dadd(113.818, 81.7383, 22, 0)
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  }
}
proc shape3d_52() {
  dend[334] {	pt3dadd(36.0352, 220.166, 23, 0)
	pt3dadd(35.5957, 220.605, 23, 0)
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  }
}
proc shape3d_53() {
  dend[342] {	pt3dadd(28.125, 124.805, 34, 0)
	pt3dadd(27.6855, 124.805, 34, 0)
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  }
}
proc shape3d_54() {
  dend[349] {	pt3dadd(9.66797, 139.746, 35, 0)
	pt3dadd(9.22852, 140.186, 35, 0)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
  shape3d_39()
  shape3d_40()
  shape3d_41()
  shape3d_42()
  shape3d_43()
  shape3d_44()
  shape3d_45()
  shape3d_46()
  shape3d_47()
  shape3d_48()
  shape3d_49()
  shape3d_50()
  shape3d_51()
  shape3d_52()
  shape3d_53()
  shape3d_54()
}



	objref all, off,on,dends

    proc init(){local i
		//create soma, dend[241]

		topol()
        if (numarg()>0){
            XORIGIN = $1
            YORIGIN = $2
            ZORIGIN = $3
            forall {
                for i=0, n3d()-1{
                    pt3dchange(i,x3d(i) + XORIGIN, y3d(i) + YORIGIN, z3d(i) + ZORIGIN, diam3d(i))
                }
            }
        }
	  //	objref all, OFF,ON,dends
	  	all = new SectionList()
		somas = new SectionList()
	    dends = new SectionList()
	  	ON = new SectionList()
	  	OFF = new SectionList()

 	    soma all.append()
		for i=0, 349 dend[i] all.append()
		for i=0, 349 dend[i] dends.append()
		soma somas.append()
		forsec all{
			if (z3d(n3d()-1)>=-.16*y3d(n3d()-1)+46){
				ON.append()

			}else{
				OFF.append()
				//diam=3
			}
		}


  		access soma
		distance()
		forsec dends{
			diam=.5+2.58*exp(-(distance(01)-10)/10)
		}
		countON=0
		forsec all {
            nseg=1
            insert spike
            insert capmp
            Ra = 100 // From main.hoc
		}
		forsec ON{
            countON=countON+1

   	 	}

		numsynperdend=1

		numsyn=int(countON*numsynperdend/numdendskip)+1
		objref SACinhibsyn[numsyn],SACexcsyn[numsyn],BIPsyn[numsyn]

		countn=0
		skip=0
		forsec ON{
			if(skip==0){
				for i=0,numsynperdend-1{
					/*SACinhibsyn[countn]=new SACinhib(.5)//(i+1)/(numsynperdend+1))
					SACexcsyn[countn]=new SACexc(.5)//(i+1)/(numsynperdend+1))
					SACinhibsyn[countn].locx=(x3d(1)-x3d(0))/(numsynperdend+1)*(i+1)+x3d(0)
					SACinhibsyn[countn].locy=(y3d(1)-y3d(0))/(numsynperdend+1)*(i+1)+y3d(0)
					SACexcsyn[countn].locx=(x3d(1)-x3d(0))/(numsynperdend+1)*(i+1)+x3d(0)
					SACexcsyn[countn].locy=(y3d(1)-y3d(0))/(numsynperdend+1)*(i+1)+y3d(0)*/
					//BIPsyn[countn]=new bipNMDA(.5)//(i+1)/(numsynperdend+1))
                    //BIPsyn[countn].locx=(x3d(1)-x3d(0))/(numsynperdend+1)*(i+1)+x3d(0)
					//BIPsyn[countn].locy=(y3d(1)-y3d(0))/(numsynperdend+1)*(i+1)+y3d(0)
                    //BIPsyn[countn] = new Exp2Syn(.5)
					countn=countn+1
				}
				//print countn,numsyn
			}
			skip=skip+1
            if(skip==numdendskip){skip=0}
        }
		numsyn=countn
		//print countn
		vshift_ca_spike=0//-10
		TotalPump_cad=1e-2
		TotalRGB_cad=0.0001

	}
//end proc init
endtemplate DSGC_Poleg
//objref cc
//cc=new DSGC()
//load_file("nrngui.hoc")

